nchannels_in = 2
fragsize = 64
srate = 24000 
iolib = MHAIOalsa
io.in.device=hw:0
io.out.device=hw:0
io.priority=90

mhalib = mhachain 

mha.algos = [ route:sort_input transducers route:sort_output]

mha.transducers.plugin_name = mhachain 

mha.transducers.mhachain.algos = [ overlapadd ]

mha.sort_input.out = [:0 :1]
mha.sort_output.out = [:0 :1 :0 :0 :0 :0 :1 :0]

mha.transducers.calib_in.peaklevel = [115 115]
mha.transducers.calib_in.fir = [[1 0 0];[1 0 0]]
mha.transducers.calib_out.peaklevel = [ 108]
mha.transducers.calib_out.fir = [[]]
mha.transducers.calib_out.softclip.tau_attack = 0.002
mha.transducers.calib_out.softclip.tau_decay = 0.005
mha.transducers.calib_out.softclip.threshold = 0.6
mha.transducers.calib_out.softclip.slope = 0.5
mha.transducers.calib_out.softclip.tau_clip = 1
mha.transducers.calib_out.softclip.max_clipped = 1
mha.transducers.calib_out.do_clipping = yes 

mha.transducers.mhachain.overlapadd.plugin_name = mhachain

mha.transducers.mhachain.overlapadd.fftlen = 256
mha.transducers.mhachain.overlapadd.wnd.type = hanning
mha.transducers.mhachain.overlapadd.wnd.user = []
mha.transducers.mhachain.overlapadd.wnd.len = 128
mha.transducers.mhachain.overlapadd.wnd.pos = 0.5
mha.transducers.mhachain.overlapadd.wnd.exp = 1
mha.transducers.mhachain.overlapadd.zerownd.type = rect
mha.transducers.mhachain.overlapadd.zerownd.user = []
mha.transducers.mhachain.overlapadd.mhachain.algos = [multibandcompressor:mbc equalize]

mha.transducers.mhachain.overlapadd.mhachain.mbc.unit = Hz
mha.transducers.mhachain.overlapadd.mhachain.mbc.f = [250 500 1000 1500 2000 3000 4000 6000 8000]
mha.transducers.mhachain.overlapadd.mhachain.mbc.fscale = log
mha.transducers.mhachain.overlapadd.mhachain.mbc.ovltype = hanning 
mha.transducers.mhachain.overlapadd.mhachain.mbc.ftype = center
mha.transducers.mhachain.overlapadd.mhachain.mbc.plugin_name = dc_simple 

mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.limiter_threshold = [95 95 95 95 95 95 95 95 95  95 95 95 95 95 95 95 95 95 ] 
mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.expansion_slope = [1.5] 
mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.tau_attack = [0.005] 
mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.tau_decay = [0.015]
mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.filterbank = mbc
mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.g50 =                 [ 12 12 12 12 12 12 12 12 12      ...

                                           12 12 12 12 12 12 12 12 12] 
mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.g80 =                 [ 12 12 12 12 12 12 12 12 12      ...
                                           12 12 12 12 12 12 12 12 12] 

mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.maxgain =              [40 40 40 40 40 40 40 40 40 ...
                                                      40 40 40 40 40 40 40 40 40 ]
mha.transducers.mhachain.overlapadd.mhachain.mbc.dc_simple.expansion_threshold = [40 40 40 40 40 40 40 40 40   40 40 40 40 40 40 40 40 40]


mha.transducers.mhachain.overlapadd.mhachain.equalize?read:/etc/mahalia/mha_configuration/eq_gains.cfg



cmd=start


